PRISTINE

##  Example of y scoring

#-- source
s:So/Disk/Type                     = "Beam"
s:So/Disk/Component                = "BeamPosition"
s:So/Disk/BeamParticle             = "proton"
d:So/Disk/BeamEnergy               = 150 MeV
u:So/Disk/BeamEnergySpread         = 0.86
s:So/Disk/BeamPositionCutoffShape  = "Ellipse"
s:So/Disk/BeamPositionDistribution = "Gaussian"
d:So/Disk/BeamPositionCutoffX      = 5 mm   # X extent of position (if Flat or Gaussian) 
d:So/Disk/BeamPositionCutoffY      = 5 mm   # X extent of position (if Flat or Gaussian)
d:So/Disk/BeamPositionSpreadX      = 11. mm   # distribution (if Gaussian)
d:So/Disk/BeamPositionSpreadY      = 11. mm   # distribution (if Gaussian)
s:So/Disk/BeamAngularDistribution  = "Gaussian"
d:So/Disk/BeamAngularCutoffX       = 90. deg
d:So/Disk/BeamAngularCutoffY       = 90. deg
d:So/Disk/BeamAngularSpreadX       = 0.425 mrad
d:So/Disk/BeamAngularSpreadY       = 0.425 mrad
i:So/Disk/NumberOfHistoriesInRun   = 100000
Ts/ShowHistoryCountAtInterval = 100

s:Ge/BeamPosition/Parent   = "World"
s:Ge/BeamPosition/Type     = "Group"
d:Ge/BeamPosition/TransX   = 0. mm
d:Ge/BeamPosition/TransY   = 0. mm
d:Ge/BeamPosition/TransZ   = -40 cm 
d:Ge/BeamPosition/RotX     = 0. deg
d:Ge/BeamPosition/RotY     = 0. deg
d:Ge/BeamPosition/RotZ     = 0. deg

#-- apparatus
d:Ge/World/HLX       = 220 cm
d:Ge/World/HLY       = 220 cm
d:Ge/World/HLZ       = 400 cm
b:Ge/World/Invisible = "TRUE"
s:Ge/World/Material  = "Air"

#-- Water phantom
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX      = 150.0 mm
d:Ge/Phantom/HLY      = 150.0 mm
d:Ge/Phantom/HLZ      = 150.0 mm
i:Ge/Phantom/ZBins = 301
d:Ge/Phantom/TransX   = 0. mm
d:Ge/Phantom/TransY   = 0. mm
d:Ge/Phantom/TransZ   = 150. mm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0. deg
d:Ge/Phantom/RotZ     = 0. deg

sv:Ph/Default/Modules = 8 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4em-extra" 
"g4h-elastic_HP" "g4stopping" "g4ion-binarycascade" "g4decay" "g4radioactivedecay"

s:Sc/DoseAtPhantom/Quantity    = "DoseToMedium"
s:Sc/DoseAtPhantom/Component   = "Phantom"
b:Sc/DoseAtPhantom/OutputToConsole = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite" 

Ts/PauseBeforeQuit = "True"
i:Ts/NumberOfThreads = 12
i:Ts/Seed = 1
