# PRISTINE TEMPLATE BEBAS ERROR

s:So/PBS/Type                     = "Beam"
s:So/PBS/Component                = "BeamPosition"
s:So/PBS/BeamParticle             = "proton"
d:So/PBS/BeamEnergy               = ENERGIPLACEHOLDER MeV
i:So/PBS/NumberOfHistoriesInRun   = 100000

# Karakteristik geometri berkas pensil
s:So/PBS/BeamPositionCutoffShape  = "Ellipse"
s:So/PBS/BeamPositionDistribution = "Flat"
d:So/PBS/BeamPositionCutoffX      = 2 mm
d:So/PBS/BeamPositionCutoffY      = 2 mm
d:So/PBS/BeamPositionSpreadX      = 3.0 mm
d:So/PBS/BeamPositionSpreadY      = 3.0 mm
s:So/PBS/BeamAngularDistribution  = "None"
d:So/PBS/BeamAngularCutoffX       = 90. deg
d:So/PBS/BeamAngularCutoffY       = 90. deg
d:So/PBS/BeamAngularSpreadX       = 0.425 mrad
d:So/PBS/BeamAngularSpreadY       = 0.425 mrad

# Geometri Beam
s:Ge/BeamPosition/Parent   = "World"
s:Ge/BeamPosition/Type     = "Group"
d:Ge/BeamPosition/TransX   = 0. mm
d:Ge/BeamPosition/TransY   = 0. mm
d:Ge/BeamPosition/TransZ   = -5 cm 
d:Ge/BeamPosition/RotX     = 0. deg
d:Ge/BeamPosition/RotY     = 0. deg
d:Ge/BeamPosition/RotZ     = 0. deg

# Apparatus (Dunia)
d:Ge/World/HLX       = 220 cm
d:Ge/World/HLY       = 220 cm
d:Ge/World/HLZ       = 400 cm
b:Ge/World/Invisible = "TRUE"
s:Ge/World/Material  = "Air"

# Phantom PMMA
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX      = 150.0 mm
d:Ge/Phantom/HLY      = 150.0 mm
d:Ge/Phantom/HLZ      = 150.0 mm
i:Ge/Phantom/ZBins    = 301
d:Ge/Phantom/TransX   = 0. mm
d:Ge/Phantom/TransY   = 0. mm
d:Ge/Phantom/TransZ   = 150. mm
d:Ge/Phantom/RotX     = 0. deg
d:Ge/Phantom/RotY     = 0. deg
d:Ge/Phantom/RotZ     = 0. deg

# Modul Fisika
sv:Ph/Default/Modules = 8 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4em-extra" "g4h-elastic_HP" "g4stopping" "g4ion-binarycascade" "g4decay" "g4radioactivedecay"
s:Ts/G4DataDirectory = "/home/maleeka/G4Data"

# Scorer (Pencatat Dosis)
s:Sc/DosePhantom/Quantity    = "DoseToMedium"
s:Sc/DosePhantom/Component   = "Phantom"
s:Sc/DosePhantom/OutputFile  = "DosePhantom"
s:Sc/DosePhantom/OutputType  = "csv"
s:Sc/DosePhantom/IfOutputFileAlreadyExists = "Overwrite" 
b:Sc/DosePhantom/OutputToConsole = "TRUE"

# Pengaturan Eksekusi Otomatis
b:Ts/PauseBeforeQuit = "False"
b:Ts/UseQt           = "False"
i:Ts/Seed            = 1

# Pengaturan Multi-Threading
i:Ts/NumberOfThreads = 2
